<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="2020.2.6">
  <Settings>
    <Param name="Audio latency priority" updates="None" val="use prefs" valType="str"/>
    <Param name="Audio lib" updates="None" val="use prefs" valType="str"/>
    <Param name="Completed URL" updates="None" val="" valType="str"/>
    <Param name="Data file delimiter" updates="None" val="auto" valType="str"/>
    <Param name="Data filename" updates="None" val="u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])" valType="code"/>
    <Param name="Enable Escape" updates="None" val="True" valType="bool"/>
    <Param name="Experiment info" updates="None" val="{'participant': '', 'session': '001'}" valType="code"/>
    <Param name="Force stereo" updates="None" val="True" valType="bool"/>
    <Param name="Full-screen window" updates="None" val="True" valType="bool"/>
    <Param name="HTML path" updates="None" val="" valType="str"/>
    <Param name="Incomplete URL" updates="None" val="" valType="str"/>
    <Param name="Monitor" updates="None" val="james_laptop" valType="str"/>
    <Param name="Resources" updates="None" val="[]" valType="fileList"/>
    <Param name="Save csv file" updates="None" val="False" valType="bool"/>
    <Param name="Save excel file" updates="None" val="False" valType="bool"/>
    <Param name="Save log file" updates="None" val="True" valType="bool"/>
    <Param name="Save psydat file" updates="None" val="True" valType="bool"/>
    <Param name="Save wide csv file" updates="None" val="True" valType="bool"/>
    <Param name="Screen" updates="None" val="1" valType="num"/>
    <Param name="Show info dlg" updates="None" val="True" valType="bool"/>
    <Param name="Show mouse" updates="None" val="False" valType="bool"/>
    <Param name="Units" updates="None" val="cm" valType="str"/>
    <Param name="Use version" updates="None" val="" valType="str"/>
    <Param name="Window size (pixels)" updates="None" val="[1920, 1200]" valType="code"/>
    <Param name="blendMode" updates="None" val="avg" valType="str"/>
    <Param name="color" updates="None" val="$[-1,-1,-1]" valType="str"/>
    <Param name="colorSpace" updates="None" val="rgb" valType="str"/>
    <Param name="expName" updates="None" val="blindspot" valType="str"/>
    <Param name="exportHTML" updates="None" val="on Sync" valType="str"/>
    <Param name="logging level" updates="None" val="debug" valType="code"/>
  </Settings>
  <Routines>
    <Routine name="trial">
      <PolygonComponent name="alignment_rectangle">
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="fillColor" updates="constant" val="$[-1,-1,-1]" valType="str"/>
        <Param name="fillColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="interpolate" updates="constant" val="linear" valType="str"/>
        <Param name="lineColor" updates="constant" val="$[1,1,1]" valType="str"/>
        <Param name="lineColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="lineWidth" updates="constant" val="1" valType="code"/>
        <Param name="nVertices" updates="constant" val="4" valType="int"/>
        <Param name="name" updates="None" val="alignment_rectangle" valType="code"/>
        <Param name="opacity" updates="constant" val="1" valType="code"/>
        <Param name="ori" updates="constant" val="0" valType="code"/>
        <Param name="pos" updates="constant" val="(0, 0)" valType="code"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="shape" updates="constant" val="rectangle" valType="str"/>
        <Param name="size" updates="constant" val="(26, 16)" valType="code"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
      </PolygonComponent>
      <MouseComponent name="mouse">
        <Param name="clickable" updates="constant" val="" valType="code"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="forceEndRoutineOnPress" updates="constant" val="any click" valType="str"/>
        <Param name="name" updates="None" val="mouse" valType="code"/>
        <Param name="newClicksOnly" updates="constant" val="True" valType="bool"/>
        <Param name="saveMouseState" updates="None" val="final" valType="str"/>
        <Param name="saveParamsClickable" updates="constant" val="name," valType="code"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="False" valType="bool"/>
        <Param name="timeRelativeTo" updates="constant" val="mouse onset" valType="str"/>
      </MouseComponent>
      <PolygonComponent name="fixate_vert">
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="fillColor" updates="constant" val="$[1,1,1]" valType="str"/>
        <Param name="fillColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="interpolate" updates="constant" val="linear" valType="str"/>
        <Param name="lineColor" updates="constant" val="$[1,1,1]" valType="str"/>
        <Param name="lineColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="lineWidth" updates="constant" val="1" valType="code"/>
        <Param name="nVertices" updates="constant" val="4" valType="int"/>
        <Param name="name" updates="None" val="fixate_vert" valType="code"/>
        <Param name="opacity" updates="constant" val="1" valType="code"/>
        <Param name="ori" updates="constant" val="0" valType="code"/>
        <Param name="pos" updates="constant" val="(5,0)" valType="code"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="shape" updates="constant" val="line" valType="str"/>
        <Param name="size" updates="constant" val="(1, 1)" valType="code"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
      </PolygonComponent>
      <PolygonComponent name="fixate_horiz">
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="fillColor" updates="constant" val="$[1,1,1]" valType="str"/>
        <Param name="fillColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="interpolate" updates="constant" val="linear" valType="str"/>
        <Param name="lineColor" updates="constant" val="$[1,1,1]" valType="str"/>
        <Param name="lineColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="lineWidth" updates="constant" val="1" valType="code"/>
        <Param name="nVertices" updates="constant" val="4" valType="int"/>
        <Param name="name" updates="None" val="fixate_horiz" valType="code"/>
        <Param name="opacity" updates="constant" val="1" valType="code"/>
        <Param name="ori" updates="constant" val="90" valType="code"/>
        <Param name="pos" updates="constant" val="(5, 0)" valType="code"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="shape" updates="constant" val="line" valType="str"/>
        <Param name="size" updates="constant" val="(1, 1)" valType="code"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
      </PolygonComponent>
      <PolygonComponent name="polygon">
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="fillColor" updates="constant" val="$[-1,-1,-1]" valType="str"/>
        <Param name="fillColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="interpolate" updates="constant" val="linear" valType="str"/>
        <Param name="lineColor" updates="constant" val="$[1,-1,-1]" valType="str"/>
        <Param name="lineColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="lineWidth" updates="constant" val="3" valType="code"/>
        <Param name="nVertices" updates="constant" val="100" valType="int"/>
        <Param name="name" updates="None" val="polygon" valType="code"/>
        <Param name="opacity" updates="constant" val="1" valType="code"/>
        <Param name="ori" updates="constant" val="0" valType="code"/>
        <Param name="pos" updates="constant" val="(5-8, -1)" valType="code"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="shape" updates="constant" val="regular polygon..." valType="str"/>
        <Param name="size" updates="constant" val="(3, 3)" valType="code"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
      </PolygonComponent>
    </Routine>
  </Routines>
  <Flow>
    <Routine name="trial"/>
  </Flow>
</PsychoPy2experiment>
