PsychoPy2experiment version="2020.2.6"
Settings
  Experiment info = {'participant': '', 'eye_lr': '1', 'show_dot': 'True'}
  Full-screen window = False
  Monitor = tiffany_laptop
  Screen = 1
  Units = cm
  Window size (pixels) = [1920, 1200]
  color = $[-1,-1,-1]
  expName = weber
  logging level = debug
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Routines
  Routine Calibration
    PolygonComponent alignment_rectangle
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (26, 16)
      startVal [time (s)] = 0
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    PolygonComponent fixate_vert
      fillColor = $[1,1,1]
      pos [set every repeat] = (5*int(expInfo['eye_lr']),-2)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixate_horiz
      fillColor = $[1,1,1]
      ori = 90
      pos [set every repeat] = (5*int(expInfo['eye_lr']),-2)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent confirm_prompt
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = Press Space to confirm calibration.
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    KeyboardComponent key_resp
      allowedKeys = 'space','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    PolygonComponent fixate_vert_2
      fillColor = $[1,1,1]
      pos [set every repeat] = (5*int(expInfo['eye_lr']),-2)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixate_horiz_2
      fillColor = $[1,1,1]
      ori = 90
      pos [set every repeat] = (5*int(expInfo['eye_lr']), -2)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'w','s','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line
      fillColor = $[1,1,1]
      lineWidth = 4
      opacity [set every frame] = int(frameN%100 > 2)
      pos [set every repeat] = (blind_x*int(expInfo['eye_lr']), bottom_y-2)
      shape = line
      size = (1.5, 1)
      startVal [time (s)] = 0.5
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    PolygonComponent middle_line
      fillColor = $[1,1,1]
      lineWidth = 4
      opacity [set every frame] = int(frameN%100 > 2)
      pos [set every repeat] = (blind_x*int(expInfo['eye_lr']), middle_y-2)
      shape = line
      size = (1.5, 1)
      startVal [time (s)] = 0.5
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    PolygonComponent top_line
      fillColor = $[1,1,1]
      lineWidth = 4
      opacity [set every frame] = int(frameN%100 > 2)
      pos [set every repeat] = (blind_x*int(expInfo['eye_lr']), top_y-2)
      shape = line
      size = (1.5, 1)
      startVal [time (s)] = 0.5
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    PolygonComponent blind_spot
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 50
      opacity [set every repeat] = 0.5*int(expInfo['show_dot'])
      pos [set every repeat] = (int(expInfo['eye_lr'])*blind_x, blind_y-2)
      shape = regular polygon...
      size [set every repeat] = (blind_w-1, blind_h-1)
      startVal [time (s)] = 0.0
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  Routine Done
    TextComponent text
      color = gray
      letterHeight = 2
      startVal [time (s)] = 0.0
      text = Done
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    KeyboardComponent end_routine
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Calibration
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/line_locs.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('bottom_y', -3.9855588275087057), ('middle_y', 0.014441172491293888), ('top_y', 4.214441172491294), ('blind_x', -3), ('blind_y', -2), ('blind_w', 3), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -4.03694925309227), ('middle_y', -0.03694925309226954), ('top_y', 3.86305074690773), ('blind_x', -3), ('blind_y', -2), ('blind_w', 3), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -4.044081833650567), ('middle_y', -0.04408183365056663), ('top_y', 3.755918166349433), ('blind_x', -3), ('blind_y', -2), ('blind_w', 3), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -4.011047041517712), ('middle_y', -0.011047041517711487), ('top_y', 4.288952958482288), ('blind_x', -3), ('blind_y', -2), ('blind_w', 3), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -4.026323947893884), ('middle_y', -0.02632394789388311), ('top_y', 3.9736760521061165), ('blind_x', -3), ('blind_y', -2), ('blind_w', 3), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -3.955314554040246), ('middle_y', 0.04468544595975387), ('top_y', 3.744685445959754), ('blind_x', -3), ('blind_y', -2), ('blind_w', 3), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -3.9644899832840697), ('middle_y', 0.03551001671593014), ('top_y', 4.13551001671593), ('blind_x', -3), ('blind_y', -2), ('blind_w', 3), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -4.000887112696288), ('middle_y', -0.0008871126962883613), ('top_y', 3.999112887303712), ('blind_x', -3), ('blind_y', -2), ('blind_w', 3), ('blind_h', 2)])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
    Routine Trial
  LoopTerminator trials
  Routine Done
