PsychoPy2experiment version="2020.2.6"
Settings
  Experiment info = {'participant': '', 'eye_lr': '1'}
  Full-screen window = False
  Monitor = james_laptop
  Screen = 1
  Units = cm
  Window size (pixels) = [1920, 1200]
  color = $[-1,-1,-1]
  expName = map
  logging level = debug
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Routines
  Routine Calibration
    PolygonComponent alignment_rectangle
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (26, 16)
      startVal [time (s)] = 0
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    PolygonComponent fixate_vert
      fillColor = $[1,1,1]
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixate_horiz
      fillColor = $[1,1,1]
      ori = 90
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent confirm_prompt
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = Press Space to confirm calibration.
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    KeyboardComponent key_resp
      allowedKeys = 'space','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    PolygonComponent fixate_vert_2
      fillColor = $[1,1,1]
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixate_horiz_2
      fillColor = $[1,1,1]
      ori = 90
      pos [set every repeat] = (5*int(expInfo['eye_lr']), 0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent test_spot
      fillColor = $[1,1,1]
      nVertices = 20
      pos [set every repeat] = (-2*int(expInfo['eye_lr']) + offset_x,offset_y)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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Flow
  Routine Calibration
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/mapping.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('offset_x', 2.755374812200385), ('offset_y', 2.06363522352242)]),
      OrderedDict([('offset_x', -0.63542735335324), ('offset_y', -1.9286659976562928)]),
      OrderedDict([('offset_x', 0.09019777094886816), ('offset_y', -0.7605269003966857)]),
      OrderedDict([('offset_x', 2.270388712278181), ('offset_y', -1.5734981913685804)]),
      OrderedDict([('offset_x', -0.1872243667811535), ('offset_y', 0.6670563156402496)]),
      OrderedDict([('offset_x', 3.2649030815626814), ('offset_y', 0.03749484653912205)]),
      OrderedDict([('offset_x', -1.7452972448023694), ('offset_y', 2.0464336332577915)]),
      OrderedDict([('offset_x', 0.9469519734026529), ('offset_y', -1.995949269100476)]),
      OrderedDict([('offset_x', -1.518819445445339), ('offset_y', 1.8386539860810287)]),
      OrderedDict([('offset_x', 3.1907063037439483), ('offset_y', 1.47187145532353)]),
      OrderedDict([('offset_x', -0.22285827637829314), ('offset_y', -3.1943903354530736)]),
      OrderedDict([('offset_x', -0.5266253163697305), ('offset_y', 0.8870957875504129)]),
      OrderedDict([('offset_x', -0.18392178757826366), ('offset_y', 2.9224794221731205)]),
      OrderedDict([('offset_x', -1.916061516864325), ('offset_y', 2.4402226161041787)]),
      OrderedDict([('offset_x', 0.3895944306847143), ('offset_y', -3.887666398687848)]),
      OrderedDict([('offset_x', 1.757637491231633), ('offset_y', -0.80941166220585)]),
      OrderedDict([('offset_x', 2.598759817185864), ('offset_y', 1.3452256098548068)]),
      OrderedDict([('offset_x', -3.9908574454845738), ('offset_y', -0.05137706827740285)])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
    Routine Trial
  LoopTerminator trials
  Routine Calibration
